[[protocol]]
# V     start   duration period repeats
-80     0       900      0      0
40      next    1000     0      0
-120    next    500      0      0
-80     next    1000     0      0
-40     next    500      0      0
-60     next    500      0      0
-20     next    500      0      0
-40     next    500      0      0
0       next    500      0      0
-20     next    500      0      0
20      next    500      0      0
0       next    500      0      0
40      next    500      0      0
20      next    500      0      0
40      next    500      0      0
0       next    500      0      0
20      next    500      0      0
-20     next    500      0      0
0       next    500      0      0
-40     next    500      0      0
-20     next    500      0      0
-60     next    500      0      0
-40     next    500      0      0
-80     next    1000     0      0
40      next    500      0      0
-120    next    500      0      0
-80     next    500      0      0

